//load_file("rgcsubsets.hoc")  //loads and runs everything (unless its a function
//load_file("rgc_somatic.hoc")
load_file("rgc.hoc")
//load_file("rgc_soma2x.hoc")

load_file("session.ses") //load session, where windows are, etc.

//xopen("run_cell.hoc") // to re-load this file.

// we have loaded up a multicomartment cell, so use formal go to through all compartments.
// for all compartments, insert Hodgkin and hugely dynamics
// .mod files have all of the information and equations for ion channels
// .mod files are present on modeled, so you can just use those.
// hh.mod file contains the hodgekin hugely equations

proc hhinsert(){
	g_na = $1
	forall insert hh
		g_k = 0.1
		soma.gnabar_hh = g_na
		soma.gk_hh = g_k
		//soma psection() //need to tell section which section you want
}

hhinsert(0.1)
soma psection()


// Patch on soma
objref siclamp
soma siclamp = new IClamp(1)
siclamp.amp = 0 // units n
siclamp.dur = 1000 // units ms
siclamp.del = 50 // units ms


//patch on dendrites
objref thisone, diclamp

forsec basal {
	thisone = new SectionRef()
	thisone diclamp = new IClamp(1)
	diclamp.amp = 0 // units n
	diclamp.dur = 0 // units ms
	diclamp.del = 0 // units ms
}

//Run parameters
dt = 0.001
tstop = 1000


//calc sine wave stimulation as a fucntion of position and time
func calc_sin() {
	time_ms = $1
	xpos_mm = $2

	temp_fq_ms = temp_fq/1000 //convert temp fq from hz to cyc per ms
	cat_mmpdeg = 0.218 // vis_ang for cat: 1 deg = 0.218mm (Visual Perception: The Neurophysiological Foundations)
	spac_fq_mm = spac_fq/cat_mmpdegz //convert spat fq from cpd to cyc per mm

	fx = xpos_mm/spac_fq_mm //spatial frequency component
	wt = time_ms/temp_fq_ms //temporal frequency component
	res = sin(2*PI*(fx+wt)) //calculate sine wave

	return(res)
}


proc advance() {
 	fadvance()
 	delay_time = t-siclamp.del


forall {
   print secname()
   for i=0,n3d()-1 print i, x3d(i), y3d(i), z3d(i), diam3d(i)
}

//			siclamp.amp = ampl+ampl*calc_sin(delay_time,dendpos)

 }


proc pp() {
	temp_fq = $1 //fq in hz
	spac_fq = $2 //fq in cpd
	ampl = $3

	for i=1,3{
		//change morphology
		soma.diam = i*2

		init()
		advance()
		run()

	}
}






//proc rm_dist_cx() {
	// for i=0,distal.count()-1 {
//	forsec distal {
//		nseg = 1
//		gkbar_hh = 0
//		gnabar_hh = 0
//		gl_hh = 0
//		el_hh = 0
//		// psection()
//	}
//}

